PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[1.000,1.000,1.000]
  Experiment info = {u'participant': u'', u'scanner': u"''"}
  Units = use prefs
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  expName = math_task
  Screen = 1
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Routines
  Routine padding_fix
    PolygonComponent PADDING_FIX
      fillColor = black
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      nVertices = 99
      size = $FIX_SIZE
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  Routine trial
    TextComponent MATH_TEXT_BOX
      color = black
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text [set every repeat]:
        $MATH_TEXT
    TextComponent COMPARE_TEXT
      color = black
      stopVal [duration (s)] = 1
      startVal [time (s)] = 2.0
      letterHeight = 0.1
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      text [set every repeat]:
        $compare_value
    KeyboardComponent MATH_TEXT_RESPONSE
      correctAns = $MATH_CORR
      storeCorrect = True
      stopVal [duration (s)] = 1
      forceEndRoutine = False
      allowedKeys = '1', '2', '3'
      startVal [time (s)] = 2.0
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    CodeComponent MATH_TEXT_CODE
      Begin Experiment:
        expInfo['operations'] = ['+', '-', '*', '/', '**']
        compare_value = 0
      End Routine:
        print(MATH_TEXT_RESPONSE.keys)
        if MATH_TEXT_RESPONSE.corr:
            FEEDBACK_TEXT = 'Correct'
        else:
            FEEDBACK_TEXT = 'Incorrect'
    PolygonComponent MATH_FIX
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = .5
      startVal [time (s)] = 3
      nVertices = 99
      size [set every repeat] = $FIX_SIZE
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  Routine feedback
    TextComponent FEEDBACK_TEXT_BOX
      color = black
      text [set every repeat] = $FEEDBACK_TEXT
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent FEEDBACK_CODE
      Begin Experiment:
        FEEDBACK_TEXT = ''
      End Routine:
        num_one = np.random.randint(0, 99)
        num_two = np.random.randint(0, 99)
        operator = expInfo['operations'][np.random.randint(0, len(expInfo['operations']))]
        compare_value = np.random.randint(1, 99)
        MATH_TEXT = '{0} {1} {2}'.format(num_one, operator, num_two)

        if eval(MATH_TEXT) < compare_value:
            MATH_CORR = '1'
        elif eval(MATH_TEXT) == compare_value:
            MATH_CORR = '2'
        elif eval(MATH_TEXT) > compare_value:
            MATH_CORR = '3'
        print(MATH_TEXT, compare_value, MATH_CORR)
    PolygonComponent FEEDBACK_FIX
      fillColor = $[-1.000,-1.000,-1.000]
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1.0
      nVertices = 99
      size [set every repeat] = $FIX_SIZE
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  Routine instructions
    CodeComponent INSTRUCTION_CODE
      Begin Experiment:
        if expInfo['scanner']:
            INSTRUCTION_TEXT = \
            'You will be shown a series of formulas, \nyou must determine if the result is less than or greater than 5 \n      1 - Less Than  2 - Equal to  3 - Greater Than'
        else:
            INTRUSCTION_TEXT = \
            'You will be shown a series of formulas, \nyou must determine if the result is less than or greater than 5 \n      1 - Less Than  2 - Equal to  3 - Greater Than'
        FIX_SIZE = (50/win.size[0], 50/win.size[1])
        MATH_BASE = '{0} {1} {2}'
        if expInfo['complexity'] == 'complex':
            MATH_BASE = '{0} {1} {2} {3} {4}'
      End Routine:
        num_one = np.random.randint(0, 99)
        num_two = np.random.randint(0, 99)
        operator = expInfo['operations'][np.random.randint(0, len(expInfo['operations']))]
        compare_value = np.random.randint(1, 99)

        MATH_TEXT = '{0} {1} {2}'.format(num_one, operator, num_two)

        if eval(MATH_TEXT) < compare_value:
            MATH_CORR = '1'
        elif eval(MATH_TEXT) == compare_value:
            MATH_CORR = '2'
        elif eval(MATH_TEXT) > compare_value:
            MATH_CORR = '3'
        print(MATH_TEXT, compare_value, MATH_CORR)
    TextComponent INSTRUCTION_TEXT_BOX
      color = black
      text [set every repeat] = $INSTRUCTION_TEXT
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent INSTRUCTION_END_RESP
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator runs loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine instructions
    Routine padding_fix
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 20
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      Routine trial
      Routine feedback
    LoopTerminator trials
    Routine padding_fix
  LoopTerminator runs
